PsychoPy2experiment version="3.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  color = $[-1,-1,-1]
  expName = trsut_define_game
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Routines
  Routine Intro
    TextComponent read
      color = red
      letterHeight = 0.02
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Please read! You won't be able to do the experiment if you don't understand the instructions. 
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    TextComponent instr
      letterHeight = 0.02
      pos = (0, 0.15)
      startVal [time (s)] = 2
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      text:
        In a trust game of two players (investor and trustee) the investor received £2 which they decided to keep or to give to the trustee. If they gave the money away the £2 were increased to £10 and the trustee decided what amount to return (from £0 to £10). The investors only gave away the £2 if they thought the trustee will return at least the £2.

        We took photos of the faces of the trustees and recorded their responses. These photos were tweaked a bit to make them the same size and to partly hide the identity of the players (see below).

        Your task is to try and guess how much money each of the trustees sent back on average to an investor.

        Using the mouse select the amount you think each person gave back (out of £10). Take your time and try to make an intuitive guess. Please use the full scale (from 0 to 10).
    ImageComponent faces_4
      image = pair_faces.png
      pos = (0, -0.12)
      size = (0.7, 0.2)
      startVal [time (s)] = 2
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    TextComponent space_button
      letterHeight = 0.02
      pos = (0, -0.3)
      startVal [time (s)] = 20
      text = Press the space button when ready to start. 
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 20
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  Routine Thanks
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank you for taking part! Your response has been recorded.
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  Routine response_screen
    KeyboardComponent key_resp_5
      allowedKeys = 'left', 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (frames)] = 90
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    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        img = 'upper_lower.png'
    ImageComponent whiteUD
      image [set every repeat] = $img
      size = (0.13, 0.04)
      startVal [frame N] = 0.0
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    PolygonComponent fix_cross2
      fillColor = $[1,1,1]
      shape = cross
      size = (0.03, 0.03)
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = 90
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  Routine two_faces
    CodeComponent random_dur
      Code Type = Py
      Begin Routine:
        x = randint(low = 150, high = 200)
        y = 250 - x
        thisExp.addData('random_duration_two_faces', x)
    ImageComponent faces
      image [set every repeat] = $img_names
      size = (0.23, 0.6)
      startVal [frame N] = 0
      stopVal [duration (frames)] = 250
      units = height
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    MovieComponent loading
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = giphy.gif
      size = (30, 30)
      startVal [frame N] = 70
      stopVal [duration (frames)] = $x-70
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    ImageComponent Orangeframe
      image [set every repeat] = $polygonPos
      size = (0.23, 0.6)
      startVal [frame N] = $x
      stopVal [duration (frames)] = $y
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  Routine feedback
    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        if event.getKeys(['left']):
            img = 'up.png'

        if event.getKeys(['right']):
            img = 'down.png'
    ImageComponent orange_UD
      image [set every repeat] = $img
      size = (0.13, 0.04)
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = 90
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    PolygonComponent polygon_3
      fillColor = $[1,1,1]
      shape = cross
      size = (0.03, 0.03)
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = 90
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  Routine cue
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        z = randint(low = 60, high = 90) # values will range from 60 to 90

        thisExp.addData('random_duration_cue', z)


        if Soc.thisTrialN in [5]:
            Soc.finished = True
    PolygonComponent fix_cross
      fillColor [set every repeat] = $cueCol
      fillColorSpace = hsv
      lineColor [set every repeat] = $cueCol
      lineColorSpace = hsv
      shape = cross
      size = (0.03, 0.03)
      startVal [frame N] = 0
      stopVal [duration (frames)] = $z
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  Routine end_cross
    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        r = randint(low = 90, high = 180) # values will range from 90 to 180

        thisExp.addData('random_duration_end_cross', r)
    PolygonComponent polygon
      fillColor = $[1,1,1]
      shape = cross
      size = (0.03, 0.03)
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $r
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  Routine demo
    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Example. First block is social and will run for 5 trials, then will be the non-social block.

        Left key is 'up', right key is 'down'.

        Press space to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine demo
  LoopInitiator Soc loopType="TrialHandler"
    conditionsFile = pair_faces_Soc.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('img_names', 'Soc_82.png'), ('cond', 'zero'), ('cueCol', [90, 1, 1]), ('polygonPos', 'upper.png'), ('trigger_integers', 771), ('order', 1)]),
      OrderedDict([('img_names', 'Soc_55.png'), ('cond', 'risk'), ('cueCol', [0, 0.5, 1]), ('polygonPos', 'lower.png'), ('trigger_integers', 444), ('order', 2)]),
      OrderedDict([('img_names', 'Soc_55.png'), ('cond', 'risk'), ('cueCol', [0, 0.5, 1]), ('polygonPos', 'lower.png'), ('trigger_integers', 444), ('order', 3)]),
      OrderedDict([('img_names', 'Soc_28.png'), ('cond', 'risk'), ('cueCol', [90, 1, 1]), ('polygonPos', 'upper.png'), ('trigger_integers', 117), ('order', 4)]),
      OrderedDict([('img_names', 'Soc_64.png'), ('cond', 'risk'), ('cueCol', [90, 1, 1]), ('polygonPos', 'upper.png'), ('trigger_integers', 553), ('order', 5)]),
      OrderedDict([('img_names', 'Soc_82.png'), ('cond', 'zero'), ('cueCol', [90, 1, 1]), ('polygonPos', 'lower.png'), ('trigger_integers', 771), ('order', 6)]),
      OrderedDict([('img_names', 'Soc_73.png'), ('cond', 'risk'), ('cueCol', [90, 1, 1]), ('polygonPos', 'lower.png'), ('trigger_integers', 662), ('order', 7)]),
      OrderedDict([('img_names', 'Soc_46.png'), ('cond', 'risk'), ('cueCol', [90, 1, 1]), ('polygonPos', 'lower.png'), ('trigger_integers', 335), ('order', 8)]),
      OrderedDict([('img_names', 'Soc_46.png'), ('cond', 'risk'), ('cueCol', [90, 1, 1]), ('polygonPos', 'upper.png'), ('trigger_integers', 335), ('order', 9)])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
    Routine cue
    Routine two_faces
    Routine response_screen
    Routine feedback
    Routine end_cross
  LoopTerminator Soc
  LoopInitiator nonSoc loopType="TrialHandler"
    conditionsFile = pair_num_nonSoc.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('img_names', 'nonS_73.png'), ('cond', 'risk'), ('cueCol', [90, 1, 1]), ('polygonPos', 'upper.png'), ('trigger_integers', None), ('order', 1)]),
      OrderedDict([('img_names', 'nonS_37.png'), ('cond', 'risk'), ('cueCol', [90, 1, 1]), ('polygonPos', 'lower.png'), ('trigger_integers', None), ('order', 2)]),
      OrderedDict([('img_names', 'nonS_37.png'), ('cond', 'risk'), ('cueCol', [90, 1, 1]), ('polygonPos', 'upper.png'), ('trigger_integers', None), ('order', 3)]),
      OrderedDict([('img_names', 'nonS_37.png'), ('cond', 'risk'), ('cueCol', [90, 1, 1]), ('polygonPos', 'lower.png'), ('trigger_integers', None), ('order', 4)]),
      OrderedDict([('img_names', 'nonS_55.png'), ('cond', 'risk'), ('cueCol', [0, 0.5, 1]), ('polygonPos', 'lower.png'), ('trigger_integers', None), ('order', 5)]),
      OrderedDict([('img_names', 'nonS_73.png'), ('cond', 'risk'), ('cueCol', [90, 1, 1]), ('polygonPos', 'lower.png'), ('trigger_integers', None), ('order', 6)]),
      OrderedDict([('img_names', 'nonS_46.png'), ('cond', 'risk'), ('cueCol', [90, 1, 1]), ('polygonPos', 'upper.png'), ('trigger_integers', None), ('order', 7)]),
      OrderedDict([('img_names', 'nonS_82.png'), ('cond', 'zero'), ('cueCol', [90, 1, 1]), ('polygonPos', 'lower.png'), ('trigger_integers', None), ('order', 8)]),
      OrderedDict([('img_names', 'nonS_55.png'), ('cond', 'risk'), ('cueCol', [0, 0.5, 1]), ('polygonPos', 'upper.png'), ('trigger_integers', None), ('order', 9)])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
    Routine cue
    Routine two_faces
    Routine response_screen
    Routine feedback
    Routine end_cross
  LoopTerminator nonSoc
