PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  color = $[-1,-1,-1]
  expName = trsut_define_game
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Routines
  Routine Intro
    TextComponent instr
      letterHeight = 0.02
      pos = (0, 0.15)
      startVal [time (s)] = 3
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      text:
        In a trust game of two players (investor and trustee) the investor received £2 which they decided to keep or to give to the trustee. If they gave the money away the £2 were increased to £10 and the trustee decided what amount to return (from £0 to £10). The investors only gave away the £2 if they thought the trustee will return at least the £2.

        We took photos of the faces of the trustees and recorded their responses. These photos were tweaked a bit to make them the same size and to partly hide the identity of the players (see below).

        Your task is to try and guess how much money each of the trustees sent back on average to an investor.

        Using the mouse select the amount you think each person gave back (out of £10). Take your time and try to make an intuitive guess. Please use the full scale (from 0 to 10).
    ImageComponent faces_4
      image = pair_faces.png
      pos = (0, -0.12)
      size = (0.7, 0.2)
      startVal [time (s)] = 3
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    TextComponent space_button
      letterHeight = 0.02
      pos = (0, -0.3)
      startVal [time (s)] = 25
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 25
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  Routine Thanks
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank you for taking part! Your response has been recorded.
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  Routine response_screen
    KeyboardComponent key_resp_5
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (frames)] = 90
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    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        msg1 = 'U     D'
    TextComponent text_7
      font = Cambara
      letterHeight = 0.04
      startVal [frame N] = 0
      stopVal [duration (frames)] = 90
      text [set every repeat] = $msg1
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    PolygonComponent polygon_4
      fillColor = $[1,1,1]
      shape = cross
      size = (0.03, 0.03)
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = 90
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  Routine two_faces
    CodeComponent code
      Code Type = Py
      Begin Routine:
        x = randint(low = 150, high = 200)
        y = 250 - x
        thisExp.addData('random_duration_two_faces', x)
    ImageComponent image_3
      image [set every repeat] = $img_names
      size = (0.12, 0.3)
      startVal [frame N] = 0
      stopVal [duration (frames)] = 250
      units = height
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    MovieComponent movie
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = giphy.gif
      size = (30, 30)
      startVal [frame N] = 70
      stopVal [duration (frames)] = $x-70
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    ImageComponent image
      image [set every repeat] = $polygonPos
      size = (0.12, 0.3)
      startVal [frame N] = $x
      stopVal [duration (frames)] = $y
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  Routine feedback
    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        if event.getKeys(['left']):
            msg = 'U'
            pos = (-0.0419,0)
        if event.getKeys(['right']):
            msg = 'D'
            pos = (0.0417,0)


        r = randint(low = 90, high = 180) # values will range from 5 to 10

        thisExp.addData('random_duration_end_cross', r)
    TextComponent text_8
      color = Orange
      font = Cambara
      letterHeight = 0.04
      pos [set every repeat] = $pos
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = 90
      text [set every repeat] = $msg
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    PolygonComponent polygon_3
      fillColor = $[1,1,1]
      shape = cross
      size = (0.03, 0.03)
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $r
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  Routine cue
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        z = randint(low = 60, high = 90) # values will range from 5 to 10

        thisExp.addData('random_duration_cue', z)
    PolygonComponent polygon_2
      fillColor [set every repeat] = $cueCol
      fillColorSpace = hsv
      lineColor [set every repeat] = $cueCol
      lineColorSpace = hsv
      shape = cross
      size = (0.03, 0.03)
      startVal [frame N] = 0
      stopVal [duration (frames)] = $z
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  Routine end
    TextComponent text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = This is the end, your response has been saved. 
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Flow
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = pair_faces.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('img_names', 'newImg43.png'), ('cond', 'risk'), ('cueCol', [90, 1, 1]), ('polygonPos', 'upper.png'), ('trigger_integers', 444)]),
      OrderedDict([('img_names', 'newImg61.png'), ('cond', 'risk'), ('cueCol', [90, 1, 1]), ('polygonPos', 'lower.png'), ('trigger_integers', 888)]),
      OrderedDict([('img_names', 'newImg61.png'), ('cond', 'risk'), ('cueCol', [90, 1, 1]), ('polygonPos', 'lower.png'), ('trigger_integers', 888)]),
      OrderedDict([('img_names', 'newImg61.png'), ('cond', 'risk'), ('cueCol', [90, 1, 1]), ('polygonPos', 'lower.png'), ('trigger_integers', 888)]),
      OrderedDict([('img_names', 'newImg43.png'), ('cond', 'risk'), ('cueCol', [90, 1, 1]), ('polygonPos', 'upper.png'), ('trigger_integers', 444)]),
      OrderedDict([('img_names', 'newImg77.png'), ('cond', 'zero'), ('cueCol', [0, 0.5, 1]), ('polygonPos', 'lower.png'), ('trigger_integers', 0)]),
      OrderedDict([('img_names', 'newImg61.png'), ('cond', 'risk'), ('cueCol', [90, 1, 1]), ('polygonPos', 'upper.png'), ('trigger_integers', 888)]),
      OrderedDict([('img_names', 'newImg77.png'), ('cond', 'zero'), ('cueCol', [0, 0.5, 1]), ('polygonPos', 'lower.png'), ('trigger_integers', 0)]),
      OrderedDict([('img_names', 'newImg52.png'), ('cond', 'risk'), ('cueCol', [90, 1, 1]), ('polygonPos', 'upper.png'), ('trigger_integers', 666)]),
      OrderedDict([('img_names', 'newImg43.png'), ('cond', 'risk'), ('cueCol', [90, 1, 1]), ('polygonPos', 'upper.png'), ('trigger_integers', 444)])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
    Routine cue
    Routine two_faces
    Routine response_screen
    Routine feedback
  LoopTerminator trials_2
  Routine end
